PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'gender': u'm', u'session': u'1', u'participant': u'99'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Use version = latest
  Save csv file = True
  expName = SecondPart
  logging level = debug
  Screen = 1
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Routines
  Routine bspTrail
    CodeComponent mask_init
      Begin Experiment:
        bspMask = Mask(1280,1024,500,50)
        mask=bspMask.getEmptyMask()
      Begin Routine:
        mask=bspMask.getMask()
    ImageComponent BspTrail
      stopVal [duration (s)] = 1.0
      mask [set every repeat] = $mask
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = "img/bsp/"+$BspPic
      size = (1280,1024)
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    KeyboardComponent bspResponse
      correctAns = cond
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    TextComponent left
      text = war mir bekannt? 
      pos = (-0.5, -0.75)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent right
      text = war mir neu?
      pos = (0.5, -0.75)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine setupTrail
    CodeComponent code
  Routine end
    TextComponent ende
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlichen Dank für Ihre Teilnahme!
    KeyboardComponent endes
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine asd
    CodeComponent code_3
      Begin Experiment:
        import Queue
        import thread
        import time
        maskList = Queue.Queue()
      Begin Routine:
        maskList = Queue.Queue()
        for i in range(4):
            maskList.put(maskMask.getMask())

        #'table/'+$str((int(expInfo['session'])+int(typ))%5)+'/testa_'+$scene+'.xlsx'
  Routine trial
    CodeComponent trailMask_init
      Begin Experiment:
        trailMask = Mask(1280,1024,1500,30)
        mask1=trailMask.getEmptyMask()

        maskMask = Mask(1280,1024,5000,10)
        mask2=maskMask.getEmptyMask()
        #array mit maske initiiernem

        import Queue
        maskList = Queue.Queue()
        mask2=maskMask.getMask()
        lastFrame=0
      Begin Routine:
        mask1=trailMask.getMask()
      End Routine:
        lastFrame=0
      Each Frame:
        if (lastFrame+10)<=frameN and t>0.4 and t<0.9 and not maskList.empty():
            mask2=maskList.get()
            lastFrame= frameN
    ImageComponent stimulus
      stopVal [duration (s)] = 0.4
      mask [set every repeat] = $mask1
      pos = (0, 0.25)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = "img/stim/"+$stimPic
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    KeyboardComponent response
      correctAns = $cond
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.9
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    TextComponent imSet
      text = war im Set 
      pos = (-0.5, -0.75)
      startVal [time (s)] = 0.9
      letterHeight = 0.1
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    TextComponent nichtSet
      text = war NICHT im Set?
      pos = (0.5, -0.75)
      startVal [time (s)] = 0.9
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 0.5
      mask [set every frame] = $mask2
      units = pix
      startVal [time (s)] = 0.4
      size = (1280, 1024)
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  Routine intro
    TextComponent introTxt
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Im Nachfolgenden letzten Teil werden einige Bilder präsentiert.

        Es handelt sich dabei um Bilder aus dem Set, dass Sie soeben gelernt haben und neue Bilder.

        Drücke den linken Pfeil, wenn das Bild im gelernten Set war.
        Drücke den rechten Pfeil, wenn das Bild NICHT im gelernen Set war.


        Als kleine Beispiel Aufgabe werden Ihnen zuerst einige Beispielbilder präsentiert.
        Drücke bei diesen die linke Pfeiltaste, falls die Bilder Ihnen bekannt vorkommen und die rechte falls nicht.

        Um zu starten drücken Sie die Leertaste.
    KeyboardComponent nxtPg
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent setup_mask
      Begin Experiment:
        class Mask:
            def __init__(self,N,M,noise_num,noise_size):
                self.N=N
                self.M=M
                self.noise_num=noise_num
                self.noise_size=noise_size
                self.mask = np.zeros((N,M))
            def getEmptyMask(self):
                return np.ones( (self.N,self.M))
            def getMask(self):
                N_m=np.random.randint(self.N, size=self.noise_num)
                M_m=np.random.randint(self.M, size=self.noise_num)
                mask = np.ones( (self.N,self.M))
                for k in xrange(self.noise_num):
                        noise_s=np.random.normal(self.noise_size, 0.25*self.noise_size,1)
                        x_l=int(N_m[k]-noise_s/2) if int(N_m[k]-noise_s/2)>0 else 0
                        y_b=int(M_m[k]-noise_s/2) if int(M_m[k]-noise_s/2)>0 else 0
                        x_r=int(N_m[k]+noise_s/2) if int(N_m[k]+noise_s/2)<self.N else self.N
                        y_t=int(M_m[k]+noise_s/2) if int(M_m[k]+noise_s/2)<self.M else self.M
                        for i in xrange(x_l,x_r ):
                            for j in xrange(y_b,y_t):
                                mask[i,j] = -1
                return mask
      Begin Routine:
        print expInfo['session']
  Routine learn
    ImageComponent image_2
      stopVal [duration (s)] = 15
      startVal [time (s)] = 1
      image [set every repeat] = "img/stim/"+$stimPic
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine ready
    KeyboardComponent go
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Alles klar?

        nun kommen die Bilder aus dem Set oder neue Bilder.
        Diese sind fragmentiert. Ihre Aufgabe besteht darin zu entscheiden, ob die Bilder aus dem Set stammen oder nicht.

        Drücke den linken Pfeil, wenn das Bild im gelernten Set war.
        Drücke den rechten Pfeil, wenn das Bild NICHT im gelernen Set war.


        Um zu starten drücke die Leertaste.
  Routine set
    TextComponent text_3
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine intro
  LoopInitiator BspLoop loopType="TrialHandler"
    conditionsFile = BspMap.xlsx
    loopType = random
    nReps = 1
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    Routine bspTrail
  LoopTerminator BspLoop
  Routine ready
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = table/loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'typ': 0, 'scene': u'landscape'},
      {'typ': 0, 'scene': u'face'},
      {'typ': 0, 'scene': u'art'},
      {'typ': 1, 'scene': u'landscape'},
      {'typ': 1, 'scene': u'face'},
      {'typ': 1, 'scene': u'art'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = "table/learn_"+$scene +".xlsx"
      loopType = random
      nReps = 1
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      Routine learn
    LoopTerminator trials
    Routine ready
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = 'table/'+$str((int(expInfo['session'])+int(typ))%5)+'/testa_'+$scene+'.xlsx'
      loopType = random
      nReps = 1
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      Routine set
      Routine asd
      Routine trial
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine end
